PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'design': '1', 'position': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = global_local
  logging level = debug
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Routines
  Routine screen_scale
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        webbrowser=window;

        random=Math.random;
        randint=function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        round = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }

        psychoJS.downloadResources([{name: ("Stimuli/greenCheck.png"), path:("Stimuli/greenCheck.png")},
        {name: ("Stimuli/redWrong.png"), path:("Stimuli/redWrong.png")},
        {name: ("Stimuli/HofH2.jpg"), path:("Stimuli/HofH2.jpg")},
        {name: ("Stimuli/HofS2.jpg"), path:("Stimuli/HofS2.jpg")},
        {name: ("Stimuli/SofH2.jpg"), path:("Stimuli/SofH2.jpg")},
        {name: ("Stimuli/SofS2.jpg"), path:("Stimuli/SofS2.jpg")},
        {name: ("Designs/design1_run1.png"), path:("Designs/design1_run1.png")},
        {name: ("Designs/design2_run1.png"), path:("Designs/design2_run1.png")},
        {name: ("Designs/design3_run1.png"), path:("Designs/design3_run1.png")},
        {name: ("Designs/design4_run1.png"), path:("Designs/design4_run1.png")},
        {name: ("Designs/design1_run2.png"), path:("Designs/design1_run2.png")},
        {name: ("Designs/design2_run2.png"), path:("Designs/design2_run2.png")},
        {name: ("Designs/design3_run2.png"), path:("Designs/design3_run2.png")},
        {name: ("Designs/design4_run2.png"), path:("Designs/design4_run2.png")},
        {name: ("Designs/design1_run1_ex.png"), path:("Designs/design1_run1_ex.png")},
        {name: ("Designs/design2_run1_ex.png"), path:("Designs/design2_run1_ex.png")},
        {name: ("Designs/design3_run1_ex.png"), path:("Designs/design3_run1_ex.png")},
        {name: ("Designs/design4_run1_ex.png"), path:("Designs/design4_run1_ex.png")},
        {name: ("Designs/design1_run2_ex.png"), path:("Designs/design1_run2_ex.png")},
        {name: ("Designs/design2_run2_ex.png"), path:("Designs/design2_run2_ex.png")},
        {name: ("Designs/design3_run2_ex.png"), path:("Designs/design3_run2_ex.png")},
        {name: ("Designs/design4_run2_ex.png"), path:("Designs/design4_run2_ex.png")},
        {name: ("Designs/design1_run1.csv"), path:("Designs/design1_run1.csv")},
        {name: ("Designs/design2_run1.csv"), path:("Designs/design2_run1.csv")},
        {name: ("Designs/design3_run1.csv"), path:("Designs/design3_run1.csv")},
        {name: ("Designs/design4_run1.csv"), path:("Designs/design4_run1.csv")},
        {name: ("Designs/design1_run2.csv"), path:("Designs/design1_run2.csv")},
        {name: ("Designs/design2_run2.csv"), path:("Designs/design2_run2.csv")},
        {name: ("Designs/design3_run2.csv"), path:("Designs/design3_run2.csv")},
        {name: ("Designs/design4_run2.csv"), path:("Designs/design4_run2.csv")},
        {name: ("Designs/hand_hold_global_corr.png"), path:("Designs/hand_hold_global_corr.png")},
        {name: ("Designs/hand_hold_global_incorr.png"), path:("Designs/hand_hold_global_incorr.png")},
        {name: ("Designs/hand_hold_local_corr.png"), path:("Designs/hand_hold_local_corr.png")},
        {name: ("Designs/hand_hold_local_incorr.png"), path:("Designs/hand_hold_local_incorr.png")}]);

        expInfo['OS'] = window.navigator.platform;
        expInfo['xResolution'] = screen.width;
        expInfo['yResolution'] = screen.height;
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1

        # h = tan(degrees = 2) x (distance = 49.53)
        height = 1.7296*2
        width = 1.7296*2
        width3deg = 2.5958
        width4deg = 1.7296*2
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Resize this image to match the size of a credit card with arrow keys
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    TextComponent text_bottom
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press Space when you’re finished
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    ImageComponent ccimage
      image = bankcard.png
      saveStartStop = False
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine pracInstruct
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        fixColor_opts = ["black", "white"];
        shuffle(fixColor_opts);
        prac1_fixColSwitch = [0,0,0,1];
        shuffle(prac1_fixColSwitch);
        prac2_fixColSwitch = [0,0,0,1];
        shuffle(prac2_fixColSwitch);
        fixColorIdx_Run1 =  [0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1];
        shuffle(fixColorIdx_Run1);
        fixColorIdx_Run2 = [0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1,
                                           0, 0, 0, 0, 0, 0, 0, 1];
        shuffle(fixColorIdx_Run2);
      Begin Routine:
        hand_hold_run = 1
    ImageComponent prac_instr1
      image [set every repeat] = Designs/prac_instr1.png
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent start_exp_press
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.3
      store = nothing
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  Routine prac_instr_run1
    CodeComponent code_JS1
      Code Type = JS
      Begin JS Experiment:
        var rand4Idx;
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['design']=='1':
            instructions_run1 = 'Designs/design1_run1.png'
            cond_file_run1 = 'Designs/design1_run1.csv'
        elif expInfo['design']=='2':
            instructions_run1 = 'Designs/design2_run1.png'
            cond_file_run1 = 'Designs/design2_run1.csv'
        elif expInfo['design']=='3':
            instructions_run1 = 'Designs/design3_run1.png'
            cond_file_run1 = 'Designs/design3_run1.csv'
        elif expInfo['design']=='4':
            instructions_run1 = 'Designs/design4_run1.png'
            cond_file_run1 = 'Designs/design4_run1.csv'

        if expInfo['position']=='2':
            rand8Idx = [0,1,2,3,4,5,6,7];
            shuffle(rand8Idx)
            randRows_run1 = rand8Idx[0:4]
        elif expInfo['position']=='1':
            rand4Idx = [0,1,2,3];
            shuffle(rand4Idx)
            randRows_run1 = rand4Idx
        elif expInfo['position']=='3':
            rand4Idx = [4,5,6,7];
            shuffle(rand4Idx)
            randRows_run1 = rand4Idx
    ImageComponent Pinstructions_imageR1
      image [set every repeat] = $instructions_run1
      saveStartStop = False
      size = (0.75*1.75, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine pracFixR1
    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        pTrial_run1 = 1
        pracTotal_run1 = 4

        pTrial_run2 = 1
        pracTotal_run2 = 4
      Begin JS Experiment:
        pTrial_run1 = 1;
        pracTotal_run1 = 4;
        pTrial_run2 = 1;
        pracTotal_run2 = 4;
      Begin JS Routine:
        trialMsg = ((("Practice: " + pTrial_run1.toString()) + " of ") + pracTotal_run1.toString());
        if (((pTrial_run1 - 1) === 0)) {
            currFix = fixColor_opts[0];
            corrfixResp = undefined;
        } else {
            if ((prac1_fixColSwitch[(pTrial_run1 - 1)] === 1)) {
                if ((currFix === "white")) {
                    currFix = "black";
                    corrfixResp = "space";
                } else {
                    if ((currFix === "black")) {
                        currFix = "white";
                        corrfixResp = "space";
                    }
                }
            } else {
                currFix = currFix;
                corrfixResp = undefined;
            }
        }
        a = 1.25;
        b = 1.75;
        fixDur = (((b - a) * random()) + a);
        if ((expInfo["position"] === "0")) {
            xPosition = 0;
        } else {
            if ((expInfo["position"] === "2")) {
                if ((side === "left")) {
                    xPosition = (- (width4deg * x_scale));
                } else {
                    if ((side === "right")) {
                        xPosition = (width4deg * x_scale);
                    }
                }
            } else {
                if ((expInfo["position"] === "1")) {
                    xPosition = (- (width4deg * x_scale));
                } else {
                    if ((expInfo["position"] === "3")) {
                        xPosition = (width4deg * x_scale);
                    }
                }
            }
        }
        thisExp.addData("fixpR1", prac1_fixColSwitch[(pTrial_run1 - 1)]);
      Begin Routine:
        trialMsg = "Practice: " + str(pTrial_run1) + ' of ' + str(pracTotal_run1)
        if pTrial_run1-1 == 0:
            currFix = fixColor_opts[0]
            corrfixResp = None
        else:
            if prac1_fixColSwitch[pTrial_run1-1] == 1:
                if currFix == 'white':
                    currFix = 'black'
                    corrfixResp = 'space'
                elif currFix == 'black':
                    currFix = 'white'
                    corrfixResp = 'space'
            else:
                currFix = currFix
                corrfixResp = None
        a = 1.25 # min ITI
        b = 1.75 # max ITI
        fixDur = (b-a) * random()+a

        if expInfo['position'] == '0':
            xPosition = 0
        elif expInfo['position'] == '2':
            if side == 'left':
                xPosition = -(width4deg*x_scale)
            elif side == 'right':
                xPosition = width4deg*x_scale
        elif expInfo['position'] == '1':
            xPosition = -(width4deg*x_scale)
        elif expInfo['position'] == '3':
            xPosition = width4deg*x_scale

        thisExp.addData('fixpR1', prac1_fixColSwitch[pTrial_run1-1])
      End JS Routine:
        pTrial_run1 = (pTrial_run1 + 1);
      End Routine:
        pTrial_run1 = pTrial_run1 + 1
    TextComponent text
      color [set every repeat] = $currFix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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  Routine prac_img
    TextComponent text_5
      color [set every repeat] = $currFix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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    ImageComponent prac_image
      image [set every repeat] = $imFile
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale, height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
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    KeyboardComponent prac_resp
      allowedKeys = 'f','j'
      correctAns = $corr
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      storeCorrect = True
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    KeyboardComponent prac_fix_resp
      allowedKeys = 'space',
      correctAns = $corrfixResp
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      storeCorrect = True
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  Routine Feedback
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        feedIM =''
        if prac_resp.keys == corr:
            if prac_fix_resp.keys == corrfixResp:
                feedIM = 'Stimuli/greenCheck.png'
                prac_msg = 'Well done!'
            elif prac_fix_resp.keys != corrfixResp:
                feedIM = 'Stimuli/redWrong.png'
                prac_msg = 'Oops, your picture response was right but the cross response was wrong.'
        elif prac_resp.keys != corr:
            if prac_fix_resp.keys == corrfixResp:
                feedIM = 'Stimuli/redWrong.png'
                prac_msg = 'Oops, your cross response was right but the picture response was wrong.'
            elif prac_fix_resp.keys != corrfixResp:
                feedIM = 'Stimuli/redWrong.png'
                prac_msg = 'Oops, both responses were wrong.'
    ImageComponent imFeedback
      image [set every repeat] = $feedIM
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    TextComponent feedback_msg
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $prac_msg
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  Routine trial_instr_run1
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['design']=='1':
            instructions_run1 = 'Designs/design1_run1.png'
            cond_file_run1 = 'Designs/design1_run1.csv'
        elif expInfo['design']=='2':
            instructions_run1 = 'Designs/design2_run1.png'
            cond_file_run1 = 'Designs/design2_run1.csv'
        elif expInfo['design']=='3':
            instructions_run1 =  'Designs/design3_run1.png'
            cond_file_run1 = 'Designs/design3_run1.csv'
        elif expInfo['design']=='4':
            instructions_run1 =  'Designs/design4_run1.png'
            cond_file_run1 = 'Designs/design4_run1.csv'

        Trial_run1 = 1
        Total_run1 = 96

        Trial_run2 = 1
        Total_run2 = 96

        if expInfo['position']=='2':
            positionRows = [0,1,2,3,4,5,6,7]
        if expInfo['position']=='1':
            positionRows = [0,1,2,3]
        if expInfo['position']=='3':
            positionRows = [4,5,6,7]
    ImageComponent instructions_imageR1
      image [set every repeat] = $instructions_run1
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine trialFixR1
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if Trial_run1-1 == 0:
            currFix = fixColor_opts[0]
        else:
            if fixColorIdx_Run1[Trial_run1-1] == 0:
                currFix = currFix
            elif fixColorIdx_Run1[Trial_run1-1] == 1:
                if currFix == 'white':
                    currFix = 'black'
                elif currFix == 'black':
                    currFix = 'white'

        a = 1.25 # min ITI
        b = 1.75 # max ITI
        fixDur = (b-a) * random()+a

        if expInfo['position'] == '0':
            xPosition = 0
        elif expInfo['position'] == '2':
            if side == 'left':
                xPosition = -(width4deg*x_scale)
            elif side == 'right':
                xPosition = width4deg*x_scale
        elif expInfo['position'] == '1':
            xPosition = -(width4deg*x_scale)
        elif expInfo['position'] == '3':
            xPosition = width4deg*x_scale

        thisExp.addData('fixR1', fixColorIdx_Run1[Trial_run1-1])
      End Routine:
        Trial_run1 = Trial_run1 + 1
    TextComponent text_2
      color [set every repeat] = $currFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    KeyboardComponent fix_resp1_1
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
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  Routine trial_img
    TextComponent text_6
      color [set every repeat] = $currFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    ImageComponent trial_image
      image [set every repeat] = $imFile
      pos [set every repeat] = $(xPosition, 0)
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent trial_resp
      allowedKeys = 'f','j'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    KeyboardComponent fix_resp_2
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine prac_instr_run2
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['design']=='1':
            instructions_run2 = 'Designs/design1_run2.png'
            cond_file_run2 = 'Designs/design1_run2.csv'
        elif expInfo['design']=='2':
            instructions_run2 = 'Designs/design2_run2.png'
            cond_file_run2 = 'Designs/design2_run2.csv'
        elif expInfo['design']=='3':
            instructions_run2 =  'Designs/design3_run2.png'
            cond_file_run2 = 'Designs/design3_run2.csv'
        elif expInfo['design']=='4':
            instructions_run2 =  'Designs/design4_run2.png'
            cond_file_run2 = 'Designs/design4_run2.csv'

        if expInfo['position']=='2':
            rand8Idx = [0,1,2,3,4,5,6,7];
            shuffle(rand8Idx)
            randRows_run2 = rand8Idx[0:4]
        elif expInfo['position']=='1':
            rand4Idx = [0,1,2,3];
            shuffle(rand4Idx)
            randRows_run2 = rand4Idx
        elif expInfo['position']=='3':
            rand4Idx = [4,5,6,7];
            shuffle(rand4Idx)
            randRows_run2 = rand4Idx
    ImageComponent Pinstructions_imageR2
      image [set every repeat] = $instructions_run2
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine pracFixR2
    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        trialMsg = ((("Practice: " + pTrial_run2.toString()) + " of ") + pracTotal_run2.toString());
        if (((pTrial_run2 - 1) === 0)) {
            currFix = fixColor_opts[0];
            corrfixResp = undefined;
        } else {
            if ((prac2_fixColSwitch[(pTrial_run2 - 1)] === 0)) {
                currFix = currFix;
                corrfixResp = undefined;
            } else {
                if ((prac2_fixColSwitch[(pTrial_run2 - 1)] === 1)) {
                    if ((currFix === "white")) {
                        currFix = "black";
                        corrfixResp = "space";
                    } else {
                        if ((currFix === "black")) {
                            currFix = "white";
                            corrfixResp = "space";
                        }
                    }
                }
            }
        }
        a = 1.25;
        b = 1.75;
        fixDur = (((b - a) * random()) + a);
        if ((expInfo["position"] === "0")) {
            xPosition = 0;
        } else {
            if ((expInfo["position"] === "2")) {
                if ((side === "left")) {
                    xPosition = (- (width4deg * x_scale));
                } else {
                    if ((side === "right")) {
                        xPosition = (width4deg * x_scale);
                    }
                }
            } else {
                if ((expInfo["position"] === "1")) {
                    xPosition = (- (width4deg * x_scale));
                } else {
                    if ((expInfo["position"] === "3")) {
                        xPosition = (width4deg * x_scale);
                    }
                }
            }
        }
        thisExp.addData("fixpR2", prac2_fixColSwitch[(pTrial_run2 - 1)]);
      Begin Routine:
        trialMsg = "Practice: " + str(pTrial_run2) + ' of ' + str(pracTotal_run2)
        if pTrial_run2-1 == 0:
            currFix = fixColor_opts[0]
            corrfixResp = None
        else:
            if prac2_fixColSwitch[pTrial_run2-1] == 0:
                currFix = currFix
                corrfixResp = None
            elif  prac2_fixColSwitch[pTrial_run2-1] == 1:
                if currFix == 'white':
                    currFix = 'black'
                    corrfixResp = 'space'
                elif currFix == 'black':
                    currFix = 'white'
                    corrfixResp = 'space'
        a = 1.25 # min ITI
        b = 1.75 # max ITI
        fixDur = (b-a) * random()+a

        if expInfo['position'] == '0':
            xPosition = 0
        elif expInfo['position'] == '2':
            if side == 'left':
                xPosition = -(width4deg*x_scale)
            elif side == 'right':
                xPosition = width4deg*x_scale
        elif expInfo['position'] == '1':
            xPosition = -(width4deg*x_scale)
        elif expInfo['position'] == '3':
            xPosition = width4deg*x_scale

        thisExp.addData('fixpR2', prac2_fixColSwitch[pTrial_run2-1])
      End JS Routine:
        pTrial_run2 = (pTrial_run2 + 1);
      End Routine:
        pTrial_run2 = pTrial_run2 + 1
    TextComponent text_3
      color [set every repeat] = $currFix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    KeyboardComponent fix_respP2_1
      allowedKeys = 'space',
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
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  Routine prac_img_3
  Routine trial_instr_run2
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['design']=='1':
            instructions_run2 = 'Designs/design1_run2.png'
            cond_file_run2 = 'Designs/design1_run2.csv'
        elif expInfo['design']=='2':
            instructions_run2 = 'Designs/design2_run2.png'
            cond_file_run2 = 'Designs/design2_run2.csv'
        elif expInfo['design']=='3':
            instructions_run2 =  'Designs/design3_run2.png'
            cond_file_run2 = 'Designs/design3_run2.csv'
        elif expInfo['design']=='4':
            instructions_run2 =  'Designs/design4_run2.png'
            cond_file_run2 = 'Designs/design4_run2.csv'
    ImageComponent instructions_imageR2
      image [set every repeat] = $instructions_run2
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_4
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine trialFixR2
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if Trial_run2-1 == 0:
            currFix = fixColor_opts[0]
        else:
            if fixColorIdx_Run2[Trial_run2-1] == 0:
                currFix = currFix
            elif fixColorIdx_Run2[Trial_run2-1] == 0:
                if currFix == 'white':
                    currFix = 'black'
                elif currFix == 'white':
                    currFix = 'black'

        a = 1.25 # min ITI
        b = 1.75 # max ITI
        fixDur = (b-a) * random()+a

        if expInfo['position'] == '0':
            xPosition = 0
        elif expInfo['position'] == '2':
            if side == 'left':
                xPosition = -(width4deg*x_scale)
            elif side == 'right':
                xPosition = width4deg*x_scale
        elif expInfo['position'] == '1':
            xPosition = -(width4deg*x_scale)
        elif expInfo['position'] == '3':
            xPosition = width4deg*x_scale

        thisExp.addData('fixR2', fixColorIdx_Run2[Trial_run2-1])
      End Routine:
        Trial_run2 = Trial_run2 + 1
    TextComponent text_4
      color [set every repeat] = $currFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    KeyboardComponent fix_resp2_1
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
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  Routine EndScreen
    ImageComponent image_5
      image = Designs/baby_squirt_GJ.png
      size = (0.5*1.6, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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  Routine transition2trials
    TextComponent text_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great Job!

        Now we are going to play the real game.

        Press Space to see the instructions again.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine routine_1
  Routine pracInstruct2
    ImageComponent prac_instr2
      image = Designs/prac_instr2.png
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.3
      store = nothing
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  Routine pracInstruct3
    ImageComponent prac_instr3
      image = Designs/prac_instr3.png
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.3
      store = nothing
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  Routine hand_hold_instr
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['design'] == '1':
            hand_hold_ex1 = 'Designs/design1_run1_ex.png'
            handHoldCorr1 = 'j'
            hold_hand_R1_img = 'Stimuli/HofS2.jpg'
            hand_hold_ex2 = 'Designs/design1_run2_ex.png'
            handHoldCorr2 = 'j'
            hold_hand_R2_img = 'Stimuli/SofH2.jpg'
            hand_hold_feedback1corr = 'Designs/hand_hold_local_corr.png'
            hand_hold_feedback1incorr = 'Designs/hand_hold_local_incorr.png'
            hand_hold_feedback2corr = 'Designs/hand_hold_global_corr.png'
            hand_hold_feedback2incorr = 'Designs/hand_hold_global_incorr.png'
        elif expInfo['design'] == '2':
            hand_hold_ex1 = 'Designs/design2_run1_ex.png'
            handHoldCorr1 = 'j'
            hold_hand_R1_img = 'Stimuli/SofH2.jpg'
            hand_hold_ex2 = 'Designs/design2_run2_ex.png'
            handHoldCorr2 = 'j'
            hold_hand_R2_img = 'Stimuli/HofS2.jpg'
            hand_hold_feedback1corr = 'Designs/hand_hold_global_corr.png'
            hand_hold_feedback1incorr = 'Designs/hand_hold_global_incorr.png'
            hand_hold_feedback2corr = 'Designs/hand_hold_local_corr.png'
            hand_hold_feedback2incorr = 'Designs/hand_hold_local_incorr.png'
        elif expInfo['design'] == '3':
            hand_hold_ex1 = 'Designs/design3_run1_ex.png'
            handHoldCorr1 = 'f'
            hold_hand_R1_img = 'Stimuli/SofH2.jpg'
            hand_hold_ex2 = 'Designs/design3_run2_ex.png'
            handHoldCorr2 = 'f'
            hold_hand_R2_img = 'Stimuli/HofS2.jpg'
            hand_hold_feedback1corr = 'Designs/hand_hold_global_corr.png'
            hand_hold_feedback1incorr = 'Designs/hand_hold_global_incorr.png'
            hand_hold_feedback2corr = 'Designs/hand_hold_local_corr.png'
            hand_hold_feedback2incorr = 'Designs/hand_hold_local_incorr.png'
        elif expInfo['design'] == '4':
            hand_hold_ex1 = 'Designs/design4_run1_ex.png'
            handHoldCorr1 = 'f'
            hold_hand_R1_img = 'Stimuli/HofS2.jpg'
            hand_hold_ex2 = 'Designs/design4_run2_ex.png'
            handHoldCorr2 = 'f'
            hold_hand_R2_img = 'Stimuli/SofH2.jpg'
            hand_hold_feedback1corr = 'Designs/hand_hold_local_corr.png'
            hand_hold_feedback1incorr = 'Designs/hand_hold_local_incorr.png'
            hand_hold_feedback2corr = 'Designs/hand_hold_global_corr.png'
            hand_hold_feedback2incorr = 'Designs/hand_hold_global_incorr.png'
      Begin Routine:
        left_right=''
        rand_side=''
        if expInfo['position'] == '0':
            xPosition = 0
        elif expInfo['position'] == '2':
            left_right = [0,1]
            shuffle(left_right)
            rand_side = [0]
            if rand_side == 0: #left
                xPosition = -(width4deg*x_scale)
            else: #right
                xPosition = width4deg*x_scale
        elif expInfo['position'] == '1':
            xPosition = -(width4deg*x_scale)
        elif expInfo['position'] == '3':
            xPosition = width4deg*x_scale

        if hand_hold_run == 1:
            hand_hold_ex = hand_hold_ex1
            handHoldCorr = handHoldCorr1
            hold_hand_img = hold_hand_R1_img
            hand_hold_feedbackcorr = hand_hold_feedback1corr
            hand_hold_feedbackincorr = hand_hold_feedback1incorr
        else:
            hand_hold_ex = hand_hold_ex2
            handHoldCorr = handHoldCorr2
            hold_hand_img = hold_hand_R2_img
            hand_hold_feedbackcorr = hand_hold_feedback2corr
            hand_hold_feedbackincorr = hand_hold_feedback2incorr
    ImageComponent image_2
      image [set every repeat] = $hand_hold_ex
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_9
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine btwn_trial_GJ
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        hand_hold_run = 2
    ImageComponent image_4
      image = Designs/baby_dory_GJ.png
      size = (0.4, 0.4*1.83)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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  Routine hand_hold_trial
    TextComponent text_8
      letterHeight = 0.05
      text = +
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    ImageComponent image
      image [set every repeat] = $hold_hand_img
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale, height*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent hand_hold_resp
      allowedKeys = 'f','j'
      correctAns = $handHoldCorr
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine hand_hold_feedback
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        feedHHim=''

        print(hand_hold_run)
        print(hand_hold_resp.keys)
        print(handHoldCorr)
        print(hand_hold_feedback1corr)
        if hand_hold_run == 1:
            if hand_hold_resp.keys == handHoldCorr:
                feedHHim = hand_hold_feedback1corr
            else:
                feedHHim = hand_hold_feedback1incorr
        else:
            if hand_hold_resp.keys == handHoldCorr:
                feedHHim = hand_hold_feedback2corr
            else:
                feedHHim = hand_hold_feedback2incorr

        print(feedHHim)
    ImageComponent image_3
      image [set every repeat] = $feedHHim
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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Flow
  Routine screen_scale
  Routine pracInstruct
  Routine pracInstruct2
  Routine pracInstruct3
  Routine hand_hold_instr
  Routine hand_hold_trial
  Routine hand_hold_feedback
  Routine prac_instr_run1
  LoopInitiator prac_trials_run1 loopType="TrialHandler"
    Selected rows = $randRows_run1
    conditionsFile = $cond_file_run1
    loopType = random
    nReps = 1
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    Routine pracFixR1
    Routine prac_img
    Routine Feedback
  LoopTerminator prac_trials_run1
  Routine transition2trials
  Routine trial_instr_run1
  LoopInitiator trials_run1 loopType="TrialHandler"
    Selected rows = $positionRows
    conditionsFile = $cond_file_run1
    loopType = fullRandom
    nReps = 12
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    Routine trialFixR1
    Routine trial_img
  LoopTerminator trials_run1
  Routine btwn_trial_GJ
  Routine hand_hold_instr
  Routine hand_hold_trial
  Routine hand_hold_feedback
  Routine prac_instr_run2
  LoopInitiator prac_trials_run2 loopType="TrialHandler"
    Selected rows = $randRows_run2
    conditionsFile = $cond_file_run2
    loopType = random
    nReps = 1
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    Routine pracFixR2
    Routine prac_img
    Routine Feedback
  LoopTerminator prac_trials_run2
  Routine transition2trials
  Routine trial_instr_run2
  LoopInitiator trials_run2 loopType="TrialHandler"
    Selected rows = $positionRows
    conditionsFile = $cond_file_run2
    loopType = fullRandom
    nReps = 12
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    Routine trialFixR2
    Routine trial_img
  LoopTerminator trials_run2
  Routine EndScreen
